////////////////////////////////////
//scoreCards_Rtog0924Ph2.Script
//Trial Score Card for RTOG 0924 Phase 2
//Create score card using the score card function in Pinnacle
//This script should be run under the composite trial
//
//Required files that are placed in Script Home:
//createScoreCardsScript_Rtog0924Ph2.py
//defineGoalinCards.py
//totPresDose.Script
//checkPTVName_Rtog.py
//
//v. 2.0
//version 2.0 includes automatic prompt to run ROI standardization, automatic ROI creations, change iso-center dose requirement to center of mass dose requirement
//
//Modified:
//2015 08 Becket Hui
//2017 06 Becket Hui update ROI creation and use new score card with description
////////////////////////////////////

//create class that stores variables necessary in this script//
Store.At.SCard = StringKeyDict {};
//script home//
Store.At.SCard.At.ScriptHome = SimpleString{String = "/home/ch4jm/PinnacleScripts/Scorecards/";};
//patient directory//
Store.At.SCard.At.PatientPath = SimpleString{};
Store.At.SCard.At.PatientPath.AppendString = GetEnv.PATIENTS;
Store.At.SCard.At.PatientPath.AppendString = "/";
Store.At.SCard.At.PatientPath.AppendString = PatientDirectory;

//patient information//
Store.At.SCard.StringAt.PatientName = PlanInfo.PatientName;
Store.At.SCard.StringAt.MRN = PlanInfo.MedicalRecordNumber;
Store.At.SCard.StringAt.Plan = PlanInfo.PlanName;

//protocol//
Store.At.SCard.StringAt.Protocol = "RTOG0924";

//create flag//
Store.At.SCard.FloatAt.FlgGo = 1;

//find prescription dose and write to store, should be sum of two prescription//
Store.FloatAt.PresDose = 0;
Store.At.SCard.StringAt.TempCommand = Store.At.SCard.At.ScriptHome.String;
Store.At.SCard.At.TempCommand.AppendString = "totPresDose.Script";
TrialList.Current.BeamList.Current.PrescriptionList.ChildrenEachCurrent.#"@".Script.ExecuteNow = Store.At.SCard.At.TempCommand.String;
Store.At.SCard.FloatAt.PresDose = Store.At.PresDose.Value;
Store.FreeAt.PresDose = "Free Variable";

//check PTV name and find volume of PTV//
Store.At.SCard.StringAt.TempCommand = "python ";
Store.At.SCard.At.TempCommand.AppendString = Store.At.SCard.At.ScriptHome.String;
Store.At.SCard.At.TempCommand.AppendString = "checkPTVName_Rtog.py ";
Store.At.SCard.At.TempCommand.AppendString = Store.At.SCard.FloatAt.PresDose;
Store.At.SCard.At.TempCommand.AppendString = " ";
Store.At.SCard.At.TempCommand.AppendString = Store.At.SCard.At.PatientPath.String;
SpawnCommand = Store.At.SCard.At.TempCommand.String;
Store.At.SCard.StringAt.TempCommand = Store.At.SCard.At.PatientPath.String;
Store.At.SCard.At.TempCommand.AppendString = "checkPTVName.Script";
ExecuteNow = Store.At.SCard.At.TempCommand.String;

//save store//
Store.At.SCard.StringAt.Storefile = Store.At.SCard.At.PatientPath.String;
Store.At.SCard.At.Storefile.AppendString = "Store.Rtog0924";
IF.Store.At.SCard.At.FlgGo.Value.EQUALTO.#"#1".THEN.Store.Save = Store.At.SCard.At.Storefile.String;

//run python and create sub-script that creates the Pinnacle script that initiates the score cards//
Store.At.SCard.StringAt.TempCommand = "python ";
Store.At.SCard.At.TempCommand.AppendString = Store.At.SCard.At.ScriptHome.String;
Store.At.SCard.At.TempCommand.AppendString = "createScoreCardsScript_Rtog0924Ph2.py ";
Store.At.SCard.At.TempCommand.AppendString = Store.At.SCard.At.PatientPath.String;
IF.Store.At.SCard.At.FlgGo.Value.EQUALTO.#"#1".THEN.SpawnCommand = Store.At.SCard.At.TempCommand.String;

//execute sub-script created by python//
Store.At.SCard.StringAt.TempCommand = Store.At.SCard.At.PatientPath.String;
Store.At.SCard.At.TempCommand.AppendString = "createScoreCardsRtog0924Ph2.Script";
IF.Store.At.SCard.At.FlgGo.Value.EQUALTO.#"#1".THEN.Script.ExecuteNow = Store.At.SCard.At.TempCommand.String;

Store.FreeAt.SCard = "Free Variables";
